{ load_file("nrngui.hoc") }

if (isBaseOrNanoStart) {
    { load_file("CellInit.hoc") }
    { load_file("CellUpdate.hoc") }
    // !! move to caller file
    if (isAstrocyteOrNeuron) {
        { load_file("../NanoCore/Astrocyte/AstrocyteNanoInitUpdate.hoc") }
        objref nanoDistal_ref, nanoProximal_ref // !! just to source MechanismSwitch.hoc without errors
    }
    { load_file("InitParamsMain.hoc") }
}

{ load_file("MechanismSwitch.hoc") }

{ load_file("MainUi.hoc") }

{ load_file("GeometricalParameters.hoc") }

// !! these ones depend on SizeTotal
proc sourceSimulations() {
    load_file("Code/Core/Simulations/SimFrapInCircleGeometry.hoc")
    load_file("Code/Core/Simulations/SimFrapLine.hoc")
    load_file("Code/Core/Simulations/SimSpatialVoltageDistributions.hoc")
    load_file("Code/Core/Simulations/SimConstantElectricalSimulations.hoc")
    load_file("Code/Core/Simulations/SimFrequencyElectricalSimulation.hoc")
    load_file("Code/Core/Simulations/SimCalciumDynamics.hoc")
    load_file("Code/Core/Simulations/SimCalciumWave.hoc")
    load_file("Code/Core/Simulations/SimGlutamate.hoc")
    load_file("Code/Core/Simulations/SimPotassium.hoc")
}

// Opens the main program window.
proc runMain() {
    if (isBaseOrNanoStart) {
        initCell()          // !! this does not init nanogeometry anymore
        initParamsMain()    // !! this does
    }
    sourceSimulations() // !!
    showRunControlPanel()
    showMainUi()
}
