
proc makeSureMechCompsCreatedOrImportedAndRescanned() { codeContractViolation() }
proc makeSureSynCompsCreatedOrImported() { codeContractViolation() }

begintemplate InterModularCompUtils

    public makeSureAllCompsCreatedOrImportedAndRescanned, getNumDistMechComps, getComp
    
    external mmAllComps, smAllComps
    external isAstrocyteOrNeuron
    external makeSureMechCompsCreatedOrImportedAndRescanned, makeSureSynCompsCreatedOrImported
    
    
    // !! not intermodular actually
    proc makeSureAllCompsCreatedOrImportedAndRescanned() { localobj nil
        makeSureMechCompsCreatedOrImportedAndRescanned()
        if (!isAstrocyteOrNeuron) {
            makeSureSynCompsCreatedOrImported()
        }
    }
    
    // !! not intermodular actually
    func getNumDistMechComps() {
        return mmAllComps.count()
    }
    
    obfunc getComp() { local isDmOrSynPart, compIdx
        isDmOrSynPart = $1
        compIdx = $2
        if (isDmOrSynPart) {
            return mmAllComps.o(compIdx)
        } else {
            return smAllComps.o(compIdx)
        }
    }
    
endtemplate InterModularCompUtils


objref compUtils
compUtils = new InterModularCompUtils()
